//CA1 cell morphology and channels  
//to compile .mod files: nrnivmodl
//to load the cell: nrngui cellCA1.hoc

//-------------------------------------
// Cell setup
//-------------------------------------

begintemplate PyramidalCell

public dendritesCA3_list, dendritesEC_list, dendritesBSinhib_list//lists of dendrites for CA3, EC inputs

public soma, dendrite, apical_dendrite
public soma_list, basal_tree_list, axon_sec_list, apical_tip_list, apical_tip_list_addendum, apical_trunk_list
public peri_trunk_list, peri_trunk_addl, apical_non_trunk_list

public spine_head41, spine_neck41
public spine_head95, spine_neck95
public spine_headSO5, spine_neckSO5

public pl,opl //Oblique Path
public bl,obl //Basal Path
public khsection 

public pre_list, connect2target //synapses PC template 

public all 
public is_art 

public synapse_list
objref synapse_list

objref dendritesCA3_list, dendritesEC_list, dendritesBSinhib_list //lists of dendrites for CA3, EC inputs

objref soma_list, basal_tree_list, axon_sec_list, apical_tip_list, apical_tip_list_addendum, apical_trunk_list
objref peri_trunk_list, peri_trunk_addl, apical_non_trunk_list

objref vRP, vAPEX 

objref pl[150],opl[150] //Oblique Path
objref bl[150],obl[150] //Basal Path
objectvar khsection

objref CAN_temp, CAL_temp, CAT_temp, KAD_temp, KAP_temp, NA_temp 
objref tmpo2 
strdef sectype

objref pre_list //synapses PC template 

public v_init
v_init=-70//Initial voltage of sections
   

//maximum_segment_length=75

//---------------------------------------------------------------------------------------------------
//Main
//---------------------------------------------------------------------------------------------------



proc init() {localobj randomize_location 
  
 

  //---------------------------------------------------------

  topol()
  cell_analysis()
  cell_analysis_oblique1()
  cell_analysis_oblique2()  
  cell_analysis_basal()

  
  add_spine41()
  add_spine95()
  add_spineSO5()


   


  cell_setup1(v_init)
    

//-------------------------------------------------
//Lists
//-------------------------------------------------

  pre_list = new List()

  synapse_list = new List()



//-------------------------------------------------
//synapses create for EC, CA3 AMPA, CA3 BSC inhibition on PC dendrites 
//-------------------------------------------------

  synapses(dendritesEC_list,dendritesCA3_list, dendritesBSinhib_list)

 
}

create soma[5]
create dendrite[59]
create apical_dendrite[119]

create spine_head41, spine_neck41
create spine_headSO5, spine_neckSO5
create spine_head95, spine_neck95

objref synEC[1] //EC AMPA synapses
objref synCA3[1] //CA3 AMPA synapses     
objref synBSA[1] //BS GABAA synapses     
objref synBSB[1] //BS GABAB synapses     


//--------------------------------------------------
//--------------------------------------------------
//membrane properties 
//cell-setup1.hoc
//--------------------------------------------------

proc Rm_sigmoid() { local rm
     Rm_soma=Rm_default
     //Rm_end=5e3
     Rm_end=12e3
     dhalf=200
     steep=50

     for (x) {  
       xdist = find_vector_distance_precise(secname(),x)    // calc. perpedicular distance      



       rm = Rm_soma + (Rm_end - Rm_soma)/(1.0 + exp((dhalf-xdist)/steep))
       g_pas(x) = 1.0/rm
     }

}


/* Changing Ra sigmoidally along the apical trunk (obsolete in this case)*/

proc Ra_sigmoid() {  
     Ra_soma=Ra_default  
     //Ra_end=Ra_default           
     Ra_end=35             
     dhalf=210
     steep=50

     for (x) {  
       xdist = find_vector_distance_precise(secname(),x)  //calc. perpedicular distance
       Ra = Ra_soma + (Ra_end - Ra_soma)/(1.0 + exp((dhalf-xdist)/steep))
     }
}

/* To make the distal trunk h-current conductance, g_h, about 7
times higher (at 300 um) than the somatic value vis-a-vis Magee
J., J. of Neuroscience 18(19) 7613-7624, 1998, we vary I_h
conductance sigmoidally along the apical trunk.
*/

proc apical_h_insert_sig() {

     gh_soma=soma_hbar
     gh_end=soma_hbar*9
     dhalf=280
     steep=50

     for (x) {  
       xdist = find_vector_distance_precise(secname(),x)  //calc. perpedicular distance
       insert h
       gbar_h(x) = gh_soma + (gh_end - gh_soma)/(1.0 + exp((dhalf-xdist)/steep))

       }  
}

/* Inserting proximal (kap) and distal(kad) A-type channels
along the apical trunk. Proximal I_A is distributed in a fixed
conductance over the first 100 um from the cell
body. Distal-type I_A is distributed in a linearly increasing
manner for distances 100 < xdist < 350. For xdist < 100,
g_A_distal(x) = 0 and for xdist > 350 g_A_distal(x) = constant =
g_A_distal(350) 
*/

proc A_insert() {
    
     kap_distal_maxfactor=1
     kap_distal_distance=100
     //kad_distal_maxfactor=8
     kad_distal_maxfactor=6.5
     kad_distal_distance=350


     for (x) {  
       
       //distance from the soma
       
       xdist=find_vector_distance_precise(secname(),x)


       fr= xdist/kad_distal_distance

       /* fr - normed distance from the soma (divided by 350)
          kad_init = 1.04*0.0072



//----------------------------------------------------------


       */

       insert kap
       insert kad 
       ek = -80


       if (xdist < kap_distal_distance ) {

          // distance from the soma is x < 100
          gkabar_kad(x) = 0
          gkabar_kap(x) = soma_kap       
       


       } else if (xdist < kad_distal_distance ) {

         // distance from the soma is 100 < x < 350
          

          gkabar_kap(x) = 0						
          gkabar_kad(x) = kad_distal_maxfactor*kad_init*fr  
         
          
       } else {

          // distance from the soma is x> 350

          gkabar_kap(x) = 0					  
          gkabar_kad(x) = kad_distal_maxfactor*kad_init  
         
       }
     }



}


/* Inserting m-type potassium current with a fixed conductance along the apical trunk */

proc apical_km_insert() {

     km_distal_maxfactor=1
     km_distal_distance=350

     for (x) {  
       xdist = find_vector_distance_precise(secname(),x)
       fr = xdist/km_distal_distance
       insert km
       gbar_km(x)=soma_km
     }
}


/* Inserting K(Ca++)-type channels and calsium pumps along the
apical trunk with maximum conductances in 50 < xdist < 200 
*/

proc apical_kca_insert() {
       
     kca_distal_maxfactor=1
     kca_distal_distance=200
  


     for (x) {  
       xdist = find_vector_distance_precise(secname(),x)
       fr = xdist/kca_distal_distance 
       insert cad    // calsium pump/buffering mechanism
       insert kca    // slow AHP K++ current
       insert mykca  // medium AHP K++ current

	if (xdist < kca_distal_distance && xdist > 50) {       
            gbar_kca(x) = 5*soma_kca
            gkbar_mykca = 2*mykca_init
        } else {
            gbar_kca(x) = 0.5*soma_kca
            gkbar_mykca = 0.25*mykca_init
       }

     }


}

/* Inserting LVA Ca++ T-type channels along the apical trunk in
a linearly increasing manner, for xdist > 100 um 
*/

proc apical_caT_insert() {
     caT_distal_maxfactor=4
     caT_distal_distance=350

     for (x) {  
        xdist = find_vector_distance_precise(secname(),x)
        fr = xdist/caT_distal_distance
        insert cat  
        if (xdist < 100) {
           gcatbar_cat(x) = 0
        } else {
           gcatbar_cat(x) = caT_distal_maxfactor*soma_caT*fr
        } 
    }
}


/* Inserting HVAm Ca++ R-type and HVA L-type channesls along
the apical trunk. The R-type current is distributed in a fixed
conductance while the L-type current is distributed in a
maximum fixed conductance for distances xdist > 50 um and in a very
small conductance for xdist < 50 um
*/

proc apical_caR_caLH_insert() {
     for (x) {  
         xdist = find_vector_distance_precise(secname(),x)
         insert car
         gcabar_car(x) = 0.1*soma_car

         insert calH
         if (xdist > 50) {            
            gcalbar_calH(x) = 4.6*soma_caLH
         } else {
            gcalbar_calH(x) = 0.1*soma_caLH
         }
     }
}


//---------------
proc khoblique_peri_decay() { local i,x,d, v_init

v_init=$1
v_init=-70






//khsection = "apical_dendrite[46]" //"Trunk section used for oblique conductance values")

apical_dendrite[46] khsection = new SectionRef()
peri_trunkl=50.0 //Length of the peri-trunk region"



// Holding the conductance values from apical_dendrite[46] 

khsection.sec { hold_cat=gcatbar_cat(1) hold_car=soma_car hold_calH=soma_caLH hold_nap=0.0004*gnabar_hha_old }


//print "hold_cat", hold_cat
khsection.sec { hold_h=gbar_h(1) hold_ar2_hha_old=ar2_hha_old(1) hold_kdr=gkbar_hha_old(1) }


khsection.sec { hold_g_pas=g_pas(1) hold_Ra=Ra hold_kap=gkabar_kap(1) hold_kad=gkabar_kad(1) }


khsection.sec { hold_mykca=gkbar_mykca(1) hold_kca=gbar_kca(1) hold_km=gbar_km(1) }


     for i=0,plcount {


    
        // set the origin to the currently accessed section 
        
        access opl[i].trunk_section.sec



        xdist = find_vector_distance_precise(secname(),0)

  
        distance(0,1)
 
       
        trunk_kap = gkabar_kap(1)  // holding the parent trunk values
        trunk_kad = gkabar_kad(1)
        trunk_h  = gbar_h(1)
        trunk_pas = g_pas(1)
        trunk_Ra = Ra 
        trunk_car  = gcabar_car(1)
        trunk_calH  = gcalbar_calH(1)
        trunk_cat  = gcatbar_cat(1)
        trunk_kca  = gbar_kca(1)
        trunk_mykca  = gkbar_mykca(1)
        trunk_km  = gbar_km(1)
        trunk_nap  = 0.2*hold_nap // No persistent I_Na at the trunk => hold a small persent of hold_nap value
        trunk_ar2_hha_old  = ar2_hha_old(1) // spike attenuation variable

        sec_count=0
  
       forsec pl[i] {
//           printf("\t-- %s --\n", secname()) access all oblique paths from parent trunk to root oblique
                           
	   if (!sec_count) {              // skip all trunk sections
               sec_count=sec_count+1
               continue
            }         
                insert kap 
                insert kad
                insert h     
                insert pas         
                insert car
                insert calH
                insert cat
                insert kca
                insert mykca
                insert km
                insert nap
                insert cad

                e_pas = v_init
                ek = -80

                for (x) {
                  if (x > 0 && x < 1) {
                     d = distance(1,x)
                     if (d < peri_trunkl) {   // for distances close to the parent trunk section keep trunk values
                        Ra = Ra_default  
                        gkabar_kap(x) = trunk_kap  
                        gkabar_kad(x) = trunk_kad   
                        gbar_h(x) = trunk_h  
                        g_pas(x) = trunk_pas
                        gcabar_car(x) = trunk_car
                        gcalbar_calH(x) = trunk_calH
                        gcatbar_cat(x) = trunk_cat  
                        gbar_kca(x) = trunk_kca  
                        gkbar_mykca = mykca_init 
                        gbar_km(x) = trunk_km
                        gnabar_nap(x) = trunk_nap
                        ar2_hha_old(x) = trunk_ar2_hha_old         
                    
                     } else {          // for further distances set conductances to apical_dendrite[46] values (or a multiple)            
                        gkabar_kap(x) = hold_kap  
                        gkabar_kad(x) = 1.25*hold_kad   
                        gbar_h(x) = hold_h  
                        g_pas(x) = hold_g_pas
		        //g_pas(x) = 10*hold_g_pas

                        Ra = Ra_default
                        gcabar_car(x) = hold_car
                        gcalbar_calH(x) = hold_calH 
                        gcatbar_cat(x) = hold_cat  
                        ar2_hha_old(x) = 0.8*hold_ar2_hha_old  // set to 80% of dend. 46 value  
                        gbar_kca(x) = hold_kca
                        gkbar_mykca = 1.1*mykca_init 
                        gnabar_nap(x) = hold_nap  
                        gbar_km(x) = 2*hold_km             // set to 2 times the dend 46 value
             
                        if (xdist > 300 ) {                // for xdist > 300 um increase:
                           gkabar_kad(x) = 1.3*1.9*hold_kad      // A-current,
                           gcabar_car(x) = 13*hold_car       // Ca++-R current,
                           gcalbar_calH(x) = 14*hold_calH     // Ca++-L current,
                           gbar_kca(x) = 5*soma_kca         // slow AHP current  
                           gkbar_hha_old(x) = 1.07*hold_kdr // delayed rectifier
                           //gkbar_hha_old(x) = 1.1*hold_kdr // delayed rectifier
                         }

                        if (xdist > 350) {               // for xdist > 350 um increase even more:
                           gcalbar_calH(x)=15*hold_calH  // Ca++-L current,
                           gcabar_car(x) = 13*hold_car       // Ca++-R current,
			   ar2_hha_old(x) = 0.95         // less spike attenuation 
                           gnabar_nap(x)=2*hold_nap      // Na+ persistent                   

                        }
                           
                     } 
   		}
	    }
         
          sec_count=sec_count+1
        }
    }
}



//---------------------
/* Seting conductance values in all basal dendrites to be the
same as the values in apical_dendrite[14], except for the A
current conductance which is 0.6 times higher.  
*/

proc khbasal_fixed() { local i,x,d
//$o1.defvar("channel:basal", "khsection", "\"apical_dendrite[14]\"", "Trunk section used for basal conductance values")
//sprint($o1.tmp_str,"%s { hold_g_pas=g_pas(1) hold_kap=gkabar_kap(1)  hold_kad=gkabar_kad(1) hold_h=gbar_h(1)}", khsection)
//execute1($o1.tmp_str)

//khsection="apical_dendrite[14]"

apical_dendrite[14] khsection = new SectionRef()

khsection.sec { hold_g_pas=g_pas(1) hold_kap=gkabar_kap(1)  hold_kad=gkabar_kad(1) hold_h=gbar_h(1)}


forsec basal_tree_list {

      insert kap 
      insert kad
      insert h                
      insert pas
     
      for (x) {
         gkabar_kap(x) = 1.6*hold_kap
         gkabar_kad(x) = 1.6*hold_kad
         gbar_h(x) = soma_hbar
         g_pas(x) =  hold_g_pas
         Ra = Ra_default
         e_pas = v_init
         ek = -80 
     }
  }
}

/* The Na channels developed Mel and modified by Brannon,
Poirazi (hha2 and hha_old) both reduce activation as function
of voltage. In other words, they show actvity-dependent
attenuation of conductance.  Within both of these mechanisms,
ar2 ([0..1]) is used to inversely describe the intensity of
voltage-dependent attenuation. 0 is maximum attenuation, 1 is
no attenuation.

Within the cell model, we vary the amount of attenuation along
the apical trunk as a function of distance from the cell body
such that proximal sections show little attenuation and distal
sections show comparably more (with the exception of distal
obliques).

We typically decay ar2 linearly from proximal to distal with
the maximum and minimum values of decay as
parameters. Initialize these parameters: 
*/

//---------------------
//cut-sections.hoc

proc cut_sections() {  

  forall {
      nseg=1+int(L/$1)
  }

}

//---------------------


proc cell_setup1() { local v_init

 
   v_init=$1
   v_init=-70
   
 
    maximum_segment_length=75


  // Set passive membrane properties
  
    Rm_default=200000 //Specific membrane resistance 
    Rm_trunk=Rm_default //Non-oblique dendritic specific membrane resistance
    Rm_non_trunk=Rm_default //Apical oblique specific membrane resistance
    Rm_basal=Rm_default //Basal specific membrane resistance
    Rm_tip=Rm_default //Tip specific membrane resistance
    Rm_soma=Rm_default //Somatic specific membrane resistance
    Rm_axon=Rm_default //Axonal specific membrane resistance
    Ra_default=50 //Specific axial resistance
    Ra_basal=Ra_default //Basal specific axial resistance
    Ra_trunk=Ra_default //Somatic specific axial resistance
    Ra_non_trunk=Ra_default //Somatic specific axial resistance
    Ra_soma=Ra_default //Somatic specific axial resistance
    Ra_tip=Ra_default //Apical tip specific axial resistance
    Ra_axon=Ra_default //Axonal specific axial resistance
    Cm_default=1 //Default specific capacitance
    Cm_axon=Cm_default //Axonal specific capacitance
    Cm_soma=Cm_default //Somatic specific capacitance
    Cm_trunk=Cm_default //Trunk specific capacitance
    Cm_non_trunk=Cm_default //Oblique specific capacitance
    Cm_basal=Cm_default //Basal specific capacitance
    Cm_tip=Cm_default //Apical tip specific capacitance

    
  // SEVERELY affects experiment results
  celsius=34 //Temperature of slice
        
  // Set HH Sodium - Potassium properties

    gna_default=0.007 //Default Na conductance
    gna_trunk=gna_default //Trunk Na conductance
    trunk_non_trunk_ratio=1.0 //Non-trunk Na conductance ratio
    gna_non_trunk=trunk_non_trunk_ratio*gna_default //Non-trunk Na conductance
    gna_tip=gna_non_trunk //Oblique Tip Na conductance
    gna_basal=gna_default //Basal Na conductance
    gna_axon=0.1 //Axonal Na conductance
    gna_soma=gna_default //Somatic Na conductance

// Set delayed rectifier properties as a percent of Na conductances
   
    kdr_div=10.0/1.24 //Default ratio of Na to kdr conductances
    kdr_div_soma=10.0/2.0 // Soma Na-kdr divider
    kdr_div_axon=kdr_div_soma // Axon Na-kdr divider
    kdr_div_trunk=kdr_div //Trunk Na-kdr divider
    kdr_div_non_trunk=kdr_div //Non-trunk Na-kdr divider
    kdr_div_tip=kdr_div //Oblique Tips Na-kdr divider
    kdr_div_basal=kdr_div  //Basal Na-kdr divider

// Set delayed rectifie conductances

    gkdrbar_default=gna_default/kdr_div //Default KDR conductance. ")
    gkdrbar_axon=gna_axon/kdr_div_axon //Axonal  KDR conductance. ")
    gkdrbar_basal=gna_basal/kdr_div_basal //Basal  KDR conductance. ")
    gkdrbar_soma=gna_soma/kdr_div_soma //Somatic  KDR conductance. ")
    gkdrbar_trunk=gna_trunk/kdr_div_trunk //Trunk KDR conductance. ")
    gkdrbar_non_trunk=gna_non_trunk/kdr_div_non_trunk //Non-Trunk KDR conductance. ")
    gkdrbar_tip=gna_tip/kdr_div_tip //Oblique Tip KDR conductance. ")
    gkdrbar_basal=gna_basal/kdr_div_basal  //Basal KDR conductance. ")

//$o1.xopen_library("Terrence","cut-sections")


    //xopen("cut-sections.hoc")

    cut_sections(maximum_segment_length)


// make 3-d mapping of cell sections

//$o1.xopen_library("Terrence","map-segments-to-3d")

    //xopen("map-segments-to-3d.hoc")




    map_segments_to_3d()
//print "MAP-END"


// prepare to make a graph with cell configuration
//$o1.tmpo2=new Shape()
    //tmpo2=new Shape()


//-------------------------------------------------------------------        
// Set initial conductance values 
//-------------------------------------------------------------------
    soma_caL = 0.014     
    soma_car = 0.0003
    gsomacar = 0.003 
    soma_caLH =0.95*0.000333
    soma_caT = 0.0001
    soma_kca = 0.0001
    soma_km = 0.06
    mykca_init = 1.1*0.015
    soma_hbar = 1.872e-5
    soma_kap = 0.0075
    kad_init = 1.04*0.0072

    
    

// Start inserting mechanisms in cell

      sectype ="soma"
      forsec "soma" {

            insert hha2    // HH mechanism with low threshold for Na spikes (-57 mV)
                    gnabar_hha2 = gna_soma
                    gkbar_hha2  = gkdrbar_soma
                    gl_hha2     = 0
                    el_hha2     = v_init
                    ena         = 50

            insert pas    // leak conductance
                    g_pas =  1/Rm_soma
                    e_pas = v_init
                    Ra    = Ra_soma

            insert h     // h current 
                   gbar_h  = soma_hbar
                   K_h     = 8.8
                   vhalf_h = -82

            insert kap  // proximal A current
                   gkabar_kap = soma_kap
                   ek         = -80

            insert km  // m-type potassium current
                   gbar_km    = soma_km
                   ek         = -80 
           
            insert cal // HVA Ca++-L type current
                   gcalbar_cal = soma_caL/2
           
            insert cat // LVA Ca++-T type current
                   gcatbar_cat = soma_caT/2

            insert somacar // HVAm Ca++-R type current
                   gcabar_somacar = gsomacar
            
            insert kca   // K(Ca) sAHP potassium type current
                   gbar_kca = 5*soma_kca
         
            insert mykca // K(Ca) mAHP potassium type current
	           gkbar_mykca = 5.5*mykca_init
        
            insert cad  // calcium pump/buffering mechanism
           
            //tmpo2.color(2)    
      }




//  Configure Axon

      sectype="axon"
      forsec axon_sec_list {

              insert hha2  // HH mechanism with low threshold for Na spikes (-57 mV)
                    gnabar_hha2 = gna_axon
                    gkbar_hha2  = gkdrbar_axon
                    gl_hha2     = 0
                    el_hha2     = v_init
                    ena         = 50
     
              insert pas  // leak conductance
                    g_pas       = 1/Rm_axon
                    e_pas       = v_init
                    Ra          = Ra_axon
                    cm          = Cm_axon

               insert km  // m-type potassium current
                    gbar_km     = 0.5*soma_km
                    ek          = -80
                       

               //tmpo2.color(1)

      }
 

//***********************************************************************************
//  Configure apical trunk
     
      

      forsec apical_trunk_list {

         
          apical_h_insert_sig()    // Inserting h-current

          apical_caR_caLH_insert() // Inserting Ca++ R-type and Ca++ L-type currents
          
	  apical_caT_insert()      // Inserting Ca++ T-type current
          apical_kca_insert()      // Inserting K(Ca) sAHP and mAHP potassium currents
          apical_km_insert()       // Inserting m-type potassium current
          A_insert()               // Inserting A-current



          
          insert hha_old // HH mechanism with high threshold for Na spikes (-50 mV)
                    gnabar_hha_old = gna_trunk
                    gkbar_hha_old  = gkdrbar_trunk
                    ena            = 50
                    
          insert pas // leak conductance
                    e_pas          = v_init
                    el_hha_old     = v_init
                    Ra             = Ra_trunk
                    cm             = Cm_trunk

         
          Rm_sigmoid()   // configure Rm along apical trunk
          Ra_sigmoid()   // configure Ra along apical trunk
          //tmpo2.color(4)
          

           
// Set the Na+ spike attenuation variable (linearly decreasing from soma to 300 um)



         max_ar2=0.95 //Somatic value of ar2
         min_ar2=0.30 //Minimum value of ar2
         decay_end=300.0 //Distance beyond which all values are min_ar2
         decay_start=50.0 //Distance at which ar2 starts to decrease


         m_ar2 = (max_ar2 - min_ar2)/(decay_start - decay_end)
            for (x) {
                xdist = find_vector_distance_precise(secname(),x)

   

                if (xdist < decay_start) { 
                  ar2_hha_old(x) = max_ar2 
                } else if (xdist > decay_end) {               
                  ar2_hha_old(x) = min_ar2 
                } else {               
               ar2_hha_old(x) = max_ar2 + m_ar2*xdist
                }
            }

      }


//**************************************************************************


//Configure the apical-non-trunk section: insert basic mechanisms  
  
    sectype = "apical non-trunk"

    forsec apical_non_trunk_list {
            
              insert hha_old // HH mechanism with high threshold for Na spikes (-50 mV)
                     gnabar_hha_old = gna_non_trunk
                     gkbar_hha_old  = gkdrbar_non_trunk
                     el_hha_old     = v_init  
                     ena            = 50
              
               insert pas // passive properties
                     g_pas     = 1/Rm_non_trunk
                     e_pas     = v_init                     
                     Ra        = Ra_non_trunk
                     cm        = Cm_non_trunk
             

                //tmpo2.color(3)

    }


    khoblique_peri_decay(v_init)  // Configure the apical oblique dendrites



// Configure the basal dendrites


   sectype = "basal tree"
   forsec basal_tree_list {
            insert hha_old // HH mechanism with high threshold for Na spikes (-50 mV)
                    gnabar_hha_old = gna_basal
                    gkbar_hha_old  = gkdrbar_basal
                    el_hha_old     = v_init
                    gl_hha_old     = 0
  
            insert pas // passive properties
                    g_pas          = 1/Rm_basal
                    e_pas          = v_init
                    Ra             = Ra_basal
                    cm             = Cm_basal

            insert kap // Insert proximal A current
                  gkabar_kap       = 2.5*soma_kap


        Ra_sigmoid() // configure Ra
        //tmpo2.color(5)

      }


        
   khbasal_fixed() // Configure basal dendrites     

   
    forsec "soma" { g_pas=1/Rm_soma } // force Rm at all soma sections

    forall if (ismembrane("hha_old")) {  // zero out gl (leak conductance) since g_pass is taking its place
       gl_hha_old = 0  
       ek         = -77 
     }
     forall if (ismembrane("hha2")) { // zero out gl (leak conductance) since g_pass is taking its place
       gl_hha2 = 0  
       ek      = -77 
     }

    forall if(ismembrane("ca_ion")) {
      eca = 140
      ion_style("ca_ion",0,1,0,0,0)
      vshift_ca = 0
    }

  // Account for spines (obsolete in this case) 

   forall {
        for (x) {
          if (x > 0 && x < 1) {
                diam(x)=diam(x)*1.0
                }
        }
   }


 
 

    current_balance(v_init)



}



//--------------------------------------------------
//--------------------------------------------------
//cell 
//cell-analysis.hoc
//--------------------------------------------------

proc cell_analysis() {

forall insert d3   
adjustment=41.1


vRP=new Vector()
access  apical_dendrite[4]   // set point of reference (if adjustment=0). With adjustment factor = 41.1
vcreate(vRP)                 // the point of reference is the soma

vAPEX=new Vector()
access apical_dendrite[92]  // set the apex point
vcreate2(vAPEX,0.5)


//------------
//soma-list.hoc 
//-------------
soma_list=new SectionList()
forsec "soma" {
      soma_list.append()
} 


//------------
//axon-sec-list.hoc 
//-------------
axon_sec_list = new SectionList()

for i = 30,34 dendrite[i] {
  axon_sec_list.append()
}

for i = 18,22 dendrite[i] {
  axon_sec_list.append()
}

//-------------
//basal-tree-list.hoc 
//-------------

basal_tree_list=new SectionList()

for i = 0,17 dendrite[i] {
  basal_tree_list.append()
}

for i = 23,29 dendrite[i] {
  basal_tree_list.append()
}


for i = 35,58 dendrite[i] {
  basal_tree_list.append()
}


//------------
//apical-tip-list.hoc 
//------------

apical_tip_list=new SectionList()

 // List of obliques located at distances approximatelly less than 300 microns from the soma

  apical_dendrite[3]    apical_tip_list.append()   // 1 degree                 74.4  microns from soma
  apical_dendrite[5]    apical_tip_list.append()   // 0 degree                 57.46 (vertical distance)
  apical_dendrite[24]   apical_tip_list.append()   // 0 degree                 92.05
  apical_dendrite[30]   apical_tip_list.append()   // 0 degree  (essentially) 153.44
  apical_dendrite[34]   apical_tip_list.append()   // 2 degrees (ignore 3rd)  215.06
  apical_dendrite[45]   apical_tip_list.append()   // 0 degree. (essentially) 170.32
  apical_dendrite[51]   apical_tip_list.append()   // 2 degrees               210.93
  apical_dendrite[59]   apical_tip_list.append()   //                         189.34
  apical_dendrite[61]   apical_tip_list.append()   //                         221.55
  apical_dendrite[63]   apical_tip_list.append()   //                         231.58
  apical_dendrite[68]   apical_tip_list.append()   // 2 degrees               277.48
  apical_dendrite[70]   apical_tip_list.append()   // 0 degree                300.94
  apical_dendrite[106]  apical_tip_list.append()   // 0 degree                258.05
  apical_dendrite[107]  apical_tip_list.append()   // 0 degree                159.55      
  apical_dendrite[111]  apical_tip_list.append()   // 1 degree                106.30
  apical_dendrite[112]  apical_tip_list.append()   // 0 degree                 88.52
  apical_dendrite[115]  apical_tip_list.append()   // 1 degree                117.79
  apical_dendrite[118]  apical_tip_list.append()   // 0 degree                 81.66

  apical_dendrite[73]   apical_tip_list.append()   // 0 degree                334.84 
  apical_dendrite[82]   apical_tip_list.append()   // 0 degree                360.28
  apical_dendrite[86]   apical_tip_list.append()   // 0 degree                419.68
  apical_dendrite[93]   apical_tip_list.append()   // 0 degree                468.60
  apical_dendrite[97]   apical_tip_list.append()   // 0 degree                445.90
  apical_dendrite[105]  apical_tip_list.append()   // 0 degree                425.58

  //closer to the soma
  apical_dendrite[73]   apical_tip_list.append()   // 0 degree                419.68
  apical_dendrite[74]   apical_tip_list.append()   // 0 degree                468.60
  apical_dendrite[81]   apical_tip_list.append()   // 0 degree                445.90
  apical_dendrite[82]  apical_tip_list.append()   // 0 degree                425.58


//----------------------------------------------------
// Dendrites for CA3 inputs less than 300 microns from the soma// 
//----------------------------------------------------


dendritesCA3_list=new SectionList()
  	
  apical_dendrite[10]    dendritesCA3_list.append()  
  apical_dendrite[107]   dendritesCA3_list.append()        
  apical_dendrite[111]   dendritesCA3_list.append()   
  apical_dendrite[112]   dendritesCA3_list.append()   
  apical_dendrite[115]   dendritesCA3_list.append()   
  apical_dendrite[118]   dendritesCA3_list.append()   
  apical_dendrite[24]    dendritesCA3_list.append()   
  apical_dendrite[30]    dendritesCA3_list.append()   
  apical_dendrite[14]    dendritesCA3_list.append()   
  apical_dendrite[22]    dendritesCA3_list.append()   
  apical_dendrite[25]    dendritesCA3_list.append()   
  apical_dendrite[48]    dendritesCA3_list.append()   
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  


//----------------------------------------------------
// Dendrites for BS inhibition less than 300 microns from the soma 
//----------------------------------------------------

dendritesBSinhib_list=new SectionList()

  apical_dendrite[41]   dendritesBSinhib_list.append() 
  apical_dendrite[48]   dendritesBSinhib_list.append() 
  apical_dendrite[23]   dendritesBSinhib_list.append()   
  apical_dendrite[63]   dendritesBSinhib_list.append()   
  apical_dendrite[33]  dendritesBSinhib_list.append()   
  apical_dendrite[6]  dendritesBSinhib_list.append()   
  apical_dendrite[16]  dendritesBSinhib_list.append()   
  apical_dendrite[27]  dendritesBSinhib_list.append()   
  apical_dendrite[58]  dendritesBSinhib_list.append()   
  apical_dendrite[27]   dendritesBSinhib_list.append()   
  apical_dendrite[58]  dendritesBSinhib_list.append()   
  apical_dendrite[65]   dendritesBSinhib_list.append()   

//----------------------------------------------------
// Dendrites for EC inputs, more than 300 microns from the soma
//----------------------------------------------------

dendritesEC_list=new SectionList()

  apical_dendrite[73]   dendritesEC_list.append()   
  apical_dendrite[82]   dendritesEC_list.append()   
  apical_dendrite[86]   dendritesEC_list.append()   
  apical_dendrite[93]   dendritesEC_list.append()   
  apical_dendrite[97]   dendritesEC_list.append()   
  apical_dendrite[105]  dendritesEC_list.append()   
  apical_dendrite[85]   dendritesEC_list.append()                   
  apical_dendrite[95]   dendritesEC_list.append()   


//------------------------------------------------------------------------------
//apical-tip-list-addendum.hoc 
//--------------------------------------------------------------------------------
 
  apical_tip_list_addendum=new SectionList()
  
  apical_dendrite[2]    apical_tip_list_addendum.append()  // 1 degree      69.9821  microns from soma
  apical_dendrite[33]   apical_tip_list_addendum.append()  // 2 degrees    177.4831 (vertical distance)
  apical_dendrite[36]   apical_tip_list_addendum.append()  // 2 degree     189.0447 
  apical_dendrite[37]   apical_tip_list_addendum.append()  // 2 degrees    180.5792 
  apical_dendrite[39]   apical_tip_list_addendum.append()  // 1 degree      83.7030
  apical_dendrite[40]   apical_tip_list_addendum.append()  // 1 degreee    102.6654
  apical_dendrite[44]   apical_tip_list_addendum.append()  // 0 degree     172.7760 
  apical_dendrite[47]   apical_tip_list_addendum.append()  // 0 degree.    177.4980
  apical_dendrite[53]   apical_tip_list_addendum.append()  // 3 degrees    202.8910
  apical_dendrite[54]   apical_tip_list_addendum.append()  // 3 degrees    190.3009
  apical_dendrite[67]   apical_tip_list_addendum.append()  // 2 degrees    289.5367   
  apical_dendrite[110]  apical_tip_list_addendum.append()  // 1 degree      98.7392
  apical_dendrite[114]  apical_tip_list_addendum.append()  // 1 degree     123.9962
  apical_dendrite[117]  apical_tip_list_addendum.append()  // 0 degree      67.6363


  


//------------
//apical-trunk-list.hoc 
//------------

apical_trunk_list=new SectionList()

apical_dendrite[0]  apical_trunk_list.append() // 13.40  microns from soma 
apical_dendrite[4]  apical_trunk_list.append() // 46.03 (vertical distance)
apical_dendrite[6]  apical_trunk_list.append() // 45.75
apical_dendrite[14] apical_trunk_list.append() // 52.53
apical_dendrite[15] apical_trunk_list.append() // 58.97
apical_dendrite[16] apical_trunk_list.append() // 70.89
apical_dendrite[22] apical_trunk_list.append() // 72.93
apical_dendrite[23] apical_trunk_list.append() // 74.48
apical_dendrite[25] apical_trunk_list.append() // 93.56
apical_dendrite[26] apical_trunk_list.append() // 98.55
apical_dendrite[27] apical_trunk_list.append() // 121.89
apical_dendrite[41] apical_trunk_list.append() // 144.46
apical_dendrite[42] apical_trunk_list.append() // 142.81
apical_dendrite[46] apical_trunk_list.append() // 156.96
apical_dendrite[48] apical_trunk_list.append() // 162.99
apical_dendrite[56] apical_trunk_list.append() // 179.58
apical_dendrite[58] apical_trunk_list.append() // 180.11
apical_dendrite[60] apical_trunk_list.append() // 210.33
apical_dendrite[62] apical_trunk_list.append() // 222.80
apical_dendrite[64] apical_trunk_list.append() // 233.67
apical_dendrite[65] apical_trunk_list.append() // 252.71
apical_dendrite[69] apical_trunk_list.append() // 292.06
apical_dendrite[71] apical_trunk_list.append() // 324.53 
apical_dendrite[81] apical_trunk_list.append() // 346.84
apical_dendrite[83] apical_trunk_list.append() // 387.00
apical_dendrite[95] apical_trunk_list.append() // 413.05
apical_dendrite[103] apical_trunk_list.append() // 417.73
apical_dendrite[104] apical_trunk_list.append() // 423.75

 
//------------
//peri-trunk-list.hoc
//------------

peri_trunk_list=new SectionList()

apical_dendrite[1] peri_trunk_list.append()
apical_dendrite[5] peri_trunk_list.append()
apical_dendrite[7] peri_trunk_list.append()
apical_dendrite[17] peri_trunk_list.append()
apical_dendrite[24] peri_trunk_list.append()
apical_dendrite[28] peri_trunk_list.append()
apical_dendrite[29] peri_trunk_list.append()
apical_dendrite[30] peri_trunk_list.append()
apical_dendrite[40] peri_trunk_list.append()
apical_dendrite[43] peri_trunk_list.append()
apical_dendrite[47] peri_trunk_list.append()
apical_dendrite[49] peri_trunk_list.append()
apical_dendrite[57] peri_trunk_list.append()
apical_dendrite[59] peri_trunk_list.append()
apical_dendrite[61] peri_trunk_list.append()
apical_dendrite[63] peri_trunk_list.append()
apical_dendrite[66] peri_trunk_list.append()
apical_dendrite[70] peri_trunk_list.append()
apical_dendrite[72] peri_trunk_list.append()
apical_dendrite[96] peri_trunk_list.append()
apical_dendrite[104] peri_trunk_list.append()


peri_trunk_addl=new SectionList()

apical_dendrite[8]   peri_trunk_addl.append()
apical_dendrite[18]  peri_trunk_addl.append()
apical_dendrite[44]  peri_trunk_addl.append()
apical_dendrite[73]  peri_trunk_addl.append()
apical_dendrite[105] peri_trunk_addl.append()




//------------
//apical-non-trunk-list.hoc 
//------------

apical_non_trunk_list=new SectionList()

forsec "apical" {
   skip = 0
   ifsec apical_trunk_list { skip=1 }
   if (!skip) {
    apical_non_trunk_list.append()
  }
}


}


//-----------------------------------------
//proc continuation
//-----------------------------------------

proc cell_analysis_oblique1() {


//------------
//oblique-paths.hoc 
//------------

objref pl[150],opl[150]

plcount=0
pl[plcount]=new SectionList()
apical_dendrite[0] pl[plcount].append()
apical_dendrite[1] pl[plcount].append()
apical_dendrite[2] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])


plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[0] pl[plcount].append()
apical_dendrite[1] pl[plcount].append()
apical_dendrite[3] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[4] pl[plcount].append()
apical_dendrite[5] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[6] pl[plcount].append()
apical_dendrite[7] pl[plcount].append()
apical_dendrite[8] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[6] pl[plcount].append()
apical_dendrite[7] pl[plcount].append()
apical_dendrite[9] pl[plcount].append()
apical_dendrite[10] pl[plcount].append()
apical_dendrite[11] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[6] pl[plcount].append()
apical_dendrite[7] pl[plcount].append()
apical_dendrite[9] pl[plcount].append()
apical_dendrite[10] pl[plcount].append()
apical_dendrite[12] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[6] pl[plcount].append()
apical_dendrite[7] pl[plcount].append()
apical_dendrite[9] pl[plcount].append()
apical_dendrite[13] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[14] pl[plcount].append()
apical_dendrite[116] pl[plcount].append()
apical_dendrite[117] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])


plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[14] pl[plcount].append()
apical_dendrite[116] pl[plcount].append()
apical_dendrite[118] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])


plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[16] pl[plcount].append()
apical_dendrite[17] pl[plcount].append()
apical_dendrite[18] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[16] pl[plcount].append()
apical_dendrite[17] pl[plcount].append()
apical_dendrite[19] pl[plcount].append()
apical_dendrite[20] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[16] pl[plcount].append()
apical_dendrite[17] pl[plcount].append()
apical_dendrite[19] pl[plcount].append()
apical_dendrite[21] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[23] pl[plcount].append()
apical_dendrite[24] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[27] pl[plcount].append()
apical_dendrite[28] pl[plcount].append()
apical_dendrite[29] pl[plcount].append()
apical_dendrite[30] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[27] pl[plcount].append()
apical_dendrite[28] pl[plcount].append()
apical_dendrite[29] pl[plcount].append()
apical_dendrite[31] pl[plcount].append()
apical_dendrite[32] pl[plcount].append()
apical_dendrite[33] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[27] pl[plcount].append()
apical_dendrite[28] pl[plcount].append()
apical_dendrite[29] pl[plcount].append()
apical_dendrite[31] pl[plcount].append()
apical_dendrite[32] pl[plcount].append()
apical_dendrite[34] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[27] pl[plcount].append()
apical_dendrite[28] pl[plcount].append()
apical_dendrite[29] pl[plcount].append()
apical_dendrite[31] pl[plcount].append()
apical_dendrite[35] pl[plcount].append()
apical_dendrite[36] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[27] pl[plcount].append()
apical_dendrite[28] pl[plcount].append()
apical_dendrite[29] pl[plcount].append()
apical_dendrite[31] pl[plcount].append()
apical_dendrite[35] pl[plcount].append()
apical_dendrite[37] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[27] pl[plcount].append()
apical_dendrite[28] pl[plcount].append()
apical_dendrite[38] pl[plcount].append()
apical_dendrite[39] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[27] pl[plcount].append()
apical_dendrite[28] pl[plcount].append()
apical_dendrite[38] pl[plcount].append()
apical_dendrite[40] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[42] pl[plcount].append()
apical_dendrite[43] pl[plcount].append()
apical_dendrite[44] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[42] pl[plcount].append()
apical_dendrite[43] pl[plcount].append()
apical_dendrite[45] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[46] pl[plcount].append()
apical_dendrite[47] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[48] pl[plcount].append()
apical_dendrite[49] pl[plcount].append()
apical_dendrite[50] pl[plcount].append()
apical_dendrite[51] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[48] pl[plcount].append()
apical_dendrite[49] pl[plcount].append()
apical_dendrite[50] pl[plcount].append()
apical_dendrite[52] pl[plcount].append()
apical_dendrite[53] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[48] pl[plcount].append()
apical_dendrite[49] pl[plcount].append()
apical_dendrite[50] pl[plcount].append()
apical_dendrite[52] pl[plcount].append()
apical_dendrite[54] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[48] pl[plcount].append()
apical_dendrite[49] pl[plcount].append()
apical_dendrite[55] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[56] pl[plcount].append()
apical_dendrite[57] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[58] pl[plcount].append()
apical_dendrite[59] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[60] pl[plcount].append()
apical_dendrite[61] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[62] pl[plcount].append()
apical_dendrite[63] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[62] pl[plcount].append()
apical_dendrite[63] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[65] pl[plcount].append()
apical_dendrite[66] pl[plcount].append()
apical_dendrite[67] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])


plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[65] pl[plcount].append()
apical_dendrite[66] pl[plcount].append()
apical_dendrite[68] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[69] pl[plcount].append()
apical_dendrite[70] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[71] pl[plcount].append()
apical_dendrite[72] pl[plcount].append()
apical_dendrite[73] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[71] pl[plcount].append()
apical_dendrite[72] pl[plcount].append()
apical_dendrite[74] pl[plcount].append()
apical_dendrite[75] pl[plcount].append()
apical_dendrite[76] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[71] pl[plcount].append()
apical_dendrite[72] pl[plcount].append()
apical_dendrite[74] pl[plcount].append()
apical_dendrite[75] pl[plcount].append()
apical_dendrite[77] pl[plcount].append()
apical_dendrite[78] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[71] pl[plcount].append()
apical_dendrite[72] pl[plcount].append()
apical_dendrite[74] pl[plcount].append()
apical_dendrite[75] pl[plcount].append()
apical_dendrite[77] pl[plcount].append()
apical_dendrite[79] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[71] pl[plcount].append()
apical_dendrite[72] pl[plcount].append()
apical_dendrite[74] pl[plcount].append()
apical_dendrite[80] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[81] pl[plcount].append()
apical_dendrite[82] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[83] pl[plcount].append()
apical_dendrite[84] pl[plcount].append()
apical_dendrite[85] pl[plcount].append()
apical_dendrite[86] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

   
}



//--------------
proc cell_analysis_oblique2() {
//--------------
//because procedure 
//cell_analysis_oblique1()
//too big


plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[83] pl[plcount].append()
apical_dendrite[84] pl[plcount].append()
apical_dendrite[85] pl[plcount].append()
apical_dendrite[87] pl[plcount].append()
apical_dendrite[88] pl[plcount].append()
apical_dendrite[89] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])



plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[83] pl[plcount].append()
apical_dendrite[84] pl[plcount].append()
apical_dendrite[85] pl[plcount].append()
apical_dendrite[87] pl[plcount].append()
apical_dendrite[88] pl[plcount].append()
apical_dendrite[90] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[83] pl[plcount].append()
apical_dendrite[84] pl[plcount].append()
apical_dendrite[85] pl[plcount].append()
apical_dendrite[87] pl[plcount].append()
apical_dendrite[91] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[83] pl[plcount].append()
apical_dendrite[84] pl[plcount].append()
apical_dendrite[92] pl[plcount].append()
apical_dendrite[93] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[83] pl[plcount].append()
apical_dendrite[84] pl[plcount].append()
apical_dendrite[92] pl[plcount].append()
apical_dendrite[94] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[95] pl[plcount].append()
apical_dendrite[96] pl[plcount].append()
apical_dendrite[97] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[95] pl[plcount].append()
apical_dendrite[96] pl[plcount].append()
apical_dendrite[98] pl[plcount].append()
apical_dendrite[99] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[95] pl[plcount].append()
apical_dendrite[96] pl[plcount].append()
apical_dendrite[98] pl[plcount].append()
apical_dendrite[100] pl[plcount].append()
apical_dendrite[101] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[95] pl[plcount].append()
apical_dendrite[96] pl[plcount].append()
apical_dendrite[98] pl[plcount].append()
apical_dendrite[100] pl[plcount].append()
apical_dendrite[102] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[104] pl[plcount].append()
apical_dendrite[105] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[41] pl[plcount].append()
apical_dendrite[107] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[26] pl[plcount].append()
apical_dendrite[108] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[26] pl[plcount].append()
apical_dendrite[109] pl[plcount].append()
apical_dendrite[110] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[26] pl[plcount].append()
apical_dendrite[109] pl[plcount].append()
apical_dendrite[111] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[22] pl[plcount].append()
apical_dendrite[112] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[15] pl[plcount].append()
apical_dendrite[113] pl[plcount].append()
apical_dendrite[114] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[15] pl[plcount].append()
apical_dendrite[113] pl[plcount].append()
apical_dendrite[115] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])

plcount=plcount+1
pl[plcount]=new SectionList()
apical_dendrite[64] pl[plcount].append()
apical_dendrite[106] pl[plcount].append()
opl[plcount]=new ObliquePath(pl[plcount])
}

//------------
//basal-paths.hoc 
//------------

proc cell_analysis_basal() {

blcount=0
bl[blcount]=new SectionList()
dendrite[0] bl[blcount].append()
dendrite[16] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[0] bl[blcount].append()
dendrite[1] bl[blcount].append()
dendrite[2] bl[blcount].append()
dendrite[3] bl[blcount].append()
dendrite[4] bl[blcount].append()
dendrite[5] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])


blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[0] bl[blcount].append()
dendrite[1] bl[blcount].append()
dendrite[2] bl[blcount].append()
dendrite[3] bl[blcount].append()
dendrite[4] bl[blcount].append()
dendrite[6] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[0] bl[blcount].append()
dendrite[1] bl[blcount].append()
dendrite[2] bl[blcount].append()
dendrite[3] bl[blcount].append()
dendrite[7] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])


blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[0] bl[blcount].append()
dendrite[1] bl[blcount].append()
dendrite[2] bl[blcount].append()
dendrite[8] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[0] bl[blcount].append()
dendrite[1] bl[blcount].append()
dendrite[2] bl[blcount].append()
dendrite[9] bl[blcount].append()
dendrite[10] bl[blcount].append()
dendrite[11] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[0] bl[blcount].append()
dendrite[1] bl[blcount].append()
dendrite[2] bl[blcount].append()
dendrite[9] bl[blcount].append()
dendrite[10] bl[blcount].append()
dendrite[12] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[13] bl[blcount].append()
dendrite[14] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[54] bl[blcount].append()
dendrite[55] bl[blcount].append()
dendrite[57] bl[blcount].append()
dendrite[13] bl[blcount].append()
dendrite[15] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[15] bl[blcount].append()
dendrite[17] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])


blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[23] bl[blcount].append()
dendrite[24] bl[blcount].append()
dendrite[25] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])


blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[23] bl[blcount].append()
dendrite[24] bl[blcount].append()
dendrite[26] bl[blcount].append()
dendrite[27] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[23] bl[blcount].append()
dendrite[24] bl[blcount].append()
dendrite[26] bl[blcount].append()
dendrite[28] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[23] bl[blcount].append()
dendrite[29] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[35] bl[blcount].append()
dendrite[36] bl[blcount].append()
dendrite[37] bl[blcount].append()
dendrite[38] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[35] bl[blcount].append()
dendrite[36] bl[blcount].append()
dendrite[37] bl[blcount].append()
dendrite[39] bl[blcount].append()
dendrite[40] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])


blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[35] bl[blcount].append()
dendrite[36] bl[blcount].append()
dendrite[37] bl[blcount].append()
dendrite[39] bl[blcount].append()
dendrite[41] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[35] bl[blcount].append()
dendrite[36] bl[blcount].append()
dendrite[42] bl[blcount].append()
dendrite[43] bl[blcount].append()
dendrite[44] bl[blcount].append()
dendrite[45] bl[blcount].append()
dendrite[46] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[35] bl[blcount].append()
dendrite[36] bl[blcount].append()
dendrite[42] bl[blcount].append()
dendrite[43] bl[blcount].append()
dendrite[44] bl[blcount].append()
dendrite[45] bl[blcount].append()
dendrite[47] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[35] bl[blcount].append()
dendrite[36] bl[blcount].append()
dendrite[49] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[35] bl[blcount].append()
dendrite[36] bl[blcount].append()
dendrite[50] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])


blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[35] bl[blcount].append()
dendrite[51] bl[blcount].append()
dendrite[52] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[35] bl[blcount].append()
dendrite[51] bl[blcount].append()
dendrite[53] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])


blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[54] bl[blcount].append()
dendrite[56] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[54] bl[blcount].append()
dendrite[55] bl[blcount].append()
dendrite[57] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])

blcount=blcount + 1
bl[blcount]=new SectionList()
dendrite[54] bl[blcount].append()
dendrite[58] bl[blcount].append()
obl[blcount]=new BasalPath(bl[blcount])


}


//--------------------------------------------------
//topolgy
//cell.hoc
//--------------------------------------------------

proc topol() {
  topol0()
  topol1()
  topol2()
  topol3()
  topol4()
  topol5()
  topol6()
  topol7()
  topol8()
  topol9()
  topol10()
  topol11()
  topol12()
  topol13()
  topol14()
  topol15()
  topol16()
  topol17()
  topol18()
  topol19()
  topol20()
  topol21()
}



proc topol0() {

//{create soma[5]}
//{create dendrite[59]}
//{create apical_dendrite[119]}

{access soma[0]}
{pt3dclear()}
{pt3dadd(2.497,-13.006,11.13,4.58)}
{pt3dadd(2.497,-13.006,11.12,4.58)}

{soma[0] connect soma[1](0), 1}
{access soma[1]}
{pt3dclear()}
{pt3dadd(2.497,-13.006,11.12,4.58)}
{pt3dadd(1.954,-10.542,18.72,6.14)}
{pt3dadd(1.785,-8.96,18.72,6.46)}
{pt3dadd(1.423,-7.729,15.84,6.46)}
{pt3dadd(1.423,-7.559,15.84,6.46)}
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
}

//---------------
proc topol1() {

{dendrite[10] connect dendrite[11](0), 1}
{access dendrite[11]}
{pt3dclear()}
{pt3dadd(-20.848,26.894,70,1.1)}
{pt3dadd(-20.848,26.894,70.04,0.8)}
{pt3dadd(-22.272,27.944,70,0.8)}
{pt3dadd(-22.453,27.944,70,0.8)}
{pt3dadd(-23.526,29.176,70,0.8)}
{pt3dadd(-23.707,29.707,46.48,0.8)}
{pt3dadd(-23.707,29.877,46.48,0.8)}
{pt3dadd(-23.876,31.459,44.48,0.8)}
{pt3dadd(-23.876,31.809,44.16,0.8)}
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
} //topol1()

//---------------------------------
proc topol2() {

{dendrite[13] connect dendrite[15](0), 1}
{access dendrite[15]}
{pt3dclear()}
{pt3dadd(-40.103,20.385,49.36,0.8)}
{pt3dadd(-40.103,20.215,49.36,0.8)}
{pt3dadd(-42.589,19.153,69.84,0.8)}
{pt3dadd(-42.77,19.153,69.84,0.8)}
{pt3dadd(-44.194,18.633,69.84,0.8)}
{pt3dadd(-44.375,18.452,69.84,0.8)}
{pt3dadd(-44.555,18.102,69.84,0.8)}
{pt3dadd(-45.267,17.752,69.84,0.8)}
{pt3dadd(-45.448,17.752,69.84,0.8)}
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
}//topol2()

proc topol3() {

{soma[1] connect soma[3](0), 1}
{access soma[3]}
{pt3dclear()}
{pt3dadd(-0.531,1.932,16.16,12.46)}
{pt3dadd(-0.18,2.983,16.239,10.24)}
{pt3dadd(-0.361,4.214,16.239,8.36)}
{pt3dadd(0.361,6.327,16.16,5.2)}

{soma[3] connect soma[4](0), 1}
{access soma[4]}
{pt3dclear()}
{pt3dadd(0.361,6.327,16.16,5.2)}
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} //topol3()

//---------------------------------
proc topol4() {

{dendrite[24] connect dendrite[25](0), 1}
{access dendrite[25]}
{pt3dclear()}
{pt3dadd(12.655,63.449,47.92,0.8)}
{pt3dadd(12.655,63.449,47.96,0.8)}
{pt3dadd(13.899,65.212,60.8,0.8)}
{pt3dadd(15.503,66.263,58.32,0.8)}
{pt3dadd(15.684,66.443,57.6,0.8)}
{pt3dadd(15.865,67.675,52.88,0.8)}
{pt3dadd(15.865,67.845,52.24,0.8)}
{pt3dadd(16.577,69.076,50.16,0.8)}
{pt3dadd(16.757,69.076,50.48,0.8)}
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
} //topol4()

//---------------------------------
proc topol5() {

{dendrite[22] connect dendrite[30](0), 1}
{access dendrite[30]}
{pt3dclear()}
{pt3dadd(6.418,17.221,61.6,0.8)}
{pt3dadd(8.124,15.356,57.2,0.8)}
{pt3dadd(8.305,15.322,57.2,0.8)}
{pt3dadd(9.774,16.486,57.2,0.8)}
{pt3dadd(10.011,16.803,57.2,0.8)}
{pt3dadd(10.542,17.786,57.2,0.8)}
{pt3dadd(10.757,17.921,57.2,0.8)}
{pt3dadd(11.232,19.628,57.2,0.8)}
{pt3dadd(11.299,19.967,57.2,0.8)}
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
} //topol5()

//---------------------------------
proc topol6() {

{dendrite[37] connect dendrite[39](0), 1}
{access dendrite[39]}
{pt3dclear()}
{pt3dadd(-13.367,29.526,-9.12,1.1)}
{pt3dadd(-16.215,29.357,-7.76,1.1)}
{pt3dadd(-16.396,29.357,-8.56,1.1)}
{pt3dadd(-18,30.589,-19.2,1.1)}
{pt3dadd(-18.181,30.758,-20.24,1.1)}
{pt3dadd(-20.679,29.877,-23.68,1.1)}
{pt3dadd(-20.848,29.707,-23.68,1.1)}
{pt3dadd(-22.453,31.459,-31.04,1.1)}
{pt3dadd(-23.526,31.639,-34.96,1.1)}
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
} //topol6()

//---------------------------------
proc topol7() {


{dendrite[43] connect dendrite[49](0), 1}
{access dendrite[49]}
{pt3dclear()}
{pt3dadd(-9.446,31.108,-1.04,0.8)}
{pt3dadd(-12.124,33.278,5.44,0.8)}
{pt3dadd(-12.689,35.165,5.44,0.8)}
{pt3dadd(-12.802,35.538,5.44,0.8)}
{pt3dadd(-14.486,37.267,6.32,0.8)}
{pt3dadd(-14.633,37.47,6.32,0.8)}
{pt3dadd(-15.413,43.312,6.16,0.8)}
{pt3dadd(-15.492,43.866,6.16,0.8)}
{pt3dadd(-17.616,46.205,5.84,0.8)}
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
} //topol7()

//---------------------------------
proc topol8() {

{apical_dendrite[0] connect apical_dendrite[1](0), 1}
{access apical_dendrite[1]}
{pt3dclear()}
{pt3dadd(5.344,-37.787,65.44,3.32)}
{pt3dadd(5.344,-37.787,65.48,0.8)}
{pt3dadd(9.446,-35.335,122.4,0.8)}
{pt3dadd(9.627,-35.335,122.4,0.8)}
{pt3dadd(11.232,-34.803,122.16,0.8)}
{pt3dadd(11.401,-34.803,122.08,0.8)}
{pt3dadd(14.61,-35.504,128.32,0.8)}
{pt3dadd(16.396,-34.973,128.24,0.8)}
{pt3dadd(16.577,-35.154,128.24,0.8)}
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
} //topol8()

//---------------------------------
proc topol9() {



{apical_dendrite[10] connect apical_dendrite[11](0), 1}
{access apical_dendrite[11]}
{pt3dclear()}
{pt3dadd(-37.075,-48.691,230.8,0.8)}
{pt3dadd(-37.075,-48.691,230.84,0.8)}
{pt3dadd(-41.346,-50.273,230.8,0.8)}
{pt3dadd(-42.589,-51.155,230.8,0.8)}
{pt3dadd(-45.979,-53.437,242,0.8)}
{pt3dadd(-46.691,-53.957,241.44,0.8)}
{pt3dadd(-50.974,-57.652,213.12,0.8)}
{pt3dadd(-51.324,-58.183,213.04,0.8)}
{pt3dadd(-53.821,-60.116,211.2,0.8)}
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
} //topol9()

//---------------------------------
proc topol10() {

{apical_dendrite[23] connect apical_dendrite[24](0), 1}
{access apical_dendrite[24]}
{pt3dclear()}
{pt3dadd(20.848,-63.099,84.16,2.36)}
{pt3dadd(20.848,-63.099,84.2,0.8)}
{pt3dadd(21.921,-65.912,109.28,0.8)}
{pt3dadd(22.453,-68.545,109.28,0.8)}
{pt3dadd(22.272,-68.726,109.2,0.8)}
{pt3dadd(22.102,-69.076,108.96,0.8)}
{pt3dadd(21.56,-71.89,120.72,0.8)}
{pt3dadd(23.165,-74.873,120.72,0.8)}
{pt3dadd(26.023,-77.687,120.72,0.8)}
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
} //topol10()

//---------------------------------
proc topol11() {

{apical_dendrite[35] connect apical_dendrite[36](0), 1}
{access apical_dendrite[36]}
{pt3dclear()}
{pt3dadd(67.37,-124.627,158.32,1.1)}
{pt3dadd(67.37,-124.627,158.359,0.8)}
{pt3dadd(67.901,-127.26,157.84,0.8)}
{pt3dadd(70.037,-128.842,165.92,0.8)}
{pt3dadd(70.579,-129.012,166,0.8)}
{pt3dadd(72.184,-131.125,159.92,0.8)}
{pt3dadd(72.184,-131.305,159.92,0.8)}
{pt3dadd(76.455,-137.272,159.92,0.8)}
{pt3dadd(76.455,-137.453,159.92,0.8)}
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
} //topol11()

//---------------------------------
proc topol12() {

{apical_dendrite[43] connect apical_dendrite[45](0), 1}
{access apical_dendrite[45]}
{pt3dclear()}
{pt3dadd(38.318,-121.813,162.48,1.1)}
{pt3dadd(39.922,-123.045,151.44,0.8)}
{pt3dadd(39.922,-123.215,151.44,0.8)}
{pt3dadd(41.877,-125.147,151.44,0.8)}
{pt3dadd(41.877,-125.328,151.44,0.8)}
{pt3dadd(45.448,-130.424,171.44,0.8)}
{pt3dadd(45.448,-130.594,171.44,0.8)}
{pt3dadd(47.403,-133.407,156.8,0.8)}
{pt3dadd(47.584,-133.588,156.8,0.8)}
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
} //topol12()

//---------------------------------
proc topol13() {

{apical_dendrite[52] connect apical_dendrite[54](0), 1}
{access apical_dendrite[54]}
{pt3dclear()}
{pt3dadd(46.341,-154.674,188.4,1.1)}
{pt3dadd(45.109,-155.86,146.64,0.8)}
{pt3dadd(42.906,-154.651,166.96,0.8)}
{pt3dadd(42.747,-154.719,166.96,0.8)}
{pt3dadd(41.256,-155.318,167.04,0.8)}
{pt3dadd(41.086,-155.386,167.04,0.8)}
{pt3dadd(40.544,-157.872,170,0.8)}
{pt3dadd(37.086,-156.403,171.28,0.8)}
{pt3dadd(36.917,-156.471,171.92,0.8)}
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
} //topol13()

//---------------------------------
proc topol14() {

{apical_dendrite[62] connect apical_dendrite[63](0), 1}
{access apical_dendrite[63]}
{pt3dclear()}
{pt3dadd(54.895,-190.359,157.04,1.74)}
{pt3dadd(54.895,-190.359,157.079,1.1)}
{pt3dadd(54.183,-195.286,153.92,1.1)}
{pt3dadd(54.352,-195.286,153.92,1.1)}
{pt3dadd(54.352,-195.456,153.92,1.1)}
{pt3dadd(54.002,-199.32,146.72,1.1)}
{pt3dadd(54.002,-199.501,146.72,1.1)}
{pt3dadd(54.533,-200.552,145.92,1.1)}
{pt3dadd(55.957,-200.382,141.2,0.8)}
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

} //topol14()

//---------------------------------
proc topol15() {

{apical_dendrite[69] connect apical_dendrite[71](0), 1}
{access apical_dendrite[71]}
{pt3dclear()}
{pt3dadd(76.636,-249.775,186.08,2.06)}
{pt3dadd(76.455,-255.221,179.04,2.06)}
{pt3dadd(76.455,-255.391,179.12,2.06)}
{pt3dadd(79.664,-260.137,179.12,2.06)}
{pt3dadd(79.664,-260.318,179.12,2.06)}
{pt3dadd(79.664,-264.013,179.12,2.06)}
{pt3dadd(79.845,-264.182,179.12,2.06)}
{pt3dadd(79.845,-264.363,179.12,2.06)}
{pt3dadd(80.738,-270.341,179.12,2.06)}
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

} //topol15()

//---------------------------------
proc topol16() {

{apical_dendrite[77] connect apical_dendrite[79](0), 1}
{access apical_dendrite[79]}
{pt3dclear()}
{pt3dadd(197.896,-370.267,164.32,1.1)}
{pt3dadd(197.004,-373.431,164.08,0.8)}
{pt3dadd(198.789,-376.425,167.52,0.8)}
{pt3dadd(198.97,-376.945,167.52,0.8)}
{pt3dadd(200.213,-379.058,164.48,0.8)}
{pt3dadd(200.213,-379.228,165.04,0.8)}
{pt3dadd(204.846,-379.939,167.36,0.8)}
{pt3dadd(205.207,-379.939,167.12,0.8)}
{pt3dadd(210.914,-378.177,166.16,0.8)}
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

} //topol16()

//---------------------------------
proc topol17() {



{apical_dendrite[85] connect apical_dendrite[87](0), 1}
{access apical_dendrite[87]}
{pt3dclear()}
{pt3dadd(84.614,-391.025,164.64,1.1)}
{pt3dadd(80.512,-399.104,167.84,1.1)}
{pt3dadd(80.693,-399.285,167.84,1.1)}
{pt3dadd(81.586,-401.036,167.92,1.1)}
{pt3dadd(81.755,-401.737,164.08,1.1)}
{pt3dadd(83.36,-405.963,164.08,1.1)}
{pt3dadd(83.36,-406.133,164.08,1.1)}
{pt3dadd(85.676,-410.359,164.16,1.1)}
{pt3dadd(85.676,-410.529,164.16,1.1)}
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
} //topol17()

//---------------------------------
proc topol18() {


{apical_dendrite[87] connect apical_dendrite[91](0), 1}
{access apical_dendrite[91]}
{pt3dclear()}
{pt3dadd(87.823,-418.269,164.88,1.1)}
{pt3dadd(87.823,-418.438,164.88,1.1)}
{pt3dadd(86.569,-422.484,167.28,1.1)}
{pt3dadd(85.326,-424.766,166.56,0.8)}
{pt3dadd(85.145,-424.766,166.56,0.8)}
{pt3dadd(83.54,-425.998,166.56,0.8)}
{pt3dadd(83.54,-426.179,166.56,0.8)}
{pt3dadd(83.19,-426.529,166.56,0.8)}
{pt3dadd(82.648,-431.626,166.56,0.8)}
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
} //topol18()

//---------------------------------
proc topol19() {



{apical_dendrite[100] connect apical_dendrite[101](0), 1}
{access apical_dendrite[101]}
{pt3dclear()}
{pt3dadd(204.541,-379.408,170.8,0.8)}
{pt3dadd(207.987,-377.476,174.08,0.48)}
{pt3dadd(208.315,-377.34,174.08,0.48)}
{pt3dadd(216.191,-375.917,174,0.48)}
{pt3dadd(216.417,-376.007,174,0.48)}
{pt3dadd(223.954,-371.318,174,0.48)}
{pt3dadd(232.147,-370.707,173.92,0.48)}
{pt3dadd(239.672,-371.306,187.76,0.48)}
{pt3dadd(239.842,-371.238,187.76,0.48)}
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

} //topol19()

//---------------------------------
proc topol20() {


{apical_dendrite[25] connect apical_dendrite[109](0), 1}
{access apical_dendrite[109]}
{pt3dclear()}
{pt3dadd(23.707,-73.472,111.12,2.06)}
{pt3dadd(23.707,-73.472,111.16,0.8)}
{pt3dadd(21.029,-74.523,139.12,0.8)}
{pt3dadd(20.848,-74.704,139.12,0.8)}
{pt3dadd(18.181,-77.167,139.12,0.8)}
{pt3dadd(18,-77.167,139.2,0.8)}
{pt3dadd(16.396,-79.45,122.96,0.8)}
{pt3dadd(16.396,-79.619,122.96,0.8)}
{pt3dadd(16.215,-79.8,123.04,0.8)}
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

} //topol20()

//---------------------------------
proc topol21() {

{apical_dendrite[113] connect apical_dendrite[115](0), 1}
{access apical_dendrite[115]}
{pt3dclear()}
{pt3dadd(47.584,-75.235,124.72,0.8)}
{pt3dadd(47.211,-76.433,147.6,0.8)}
{pt3dadd(47.177,-76.602,147.6,0.8)}
{pt3dadd(47.957,-78.354,147.6,0.8)}
{pt3dadd(48.104,-78.557,147.6,0.8)}
{pt3dadd(48.827,-79.574,147.6,0.8)}
{pt3dadd(48.702,-80.263,147.6,0.8)}
{pt3dadd(48.782,-81.891,147.6,0.8)}
{pt3dadd(48.725,-82.23,147.6,0.8)}
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

}


//-------------------------------------------------
//map-segments-to-3d.hoc
//-------------------------------------------------


// For each section location, define x,y,z coordinates so it can be
// displayed in 3-D

proc endpt() {
  P=(n3d()-1)*$1

  x_d3($1)=x3d(P)
  y_d3($1)=y3d(P)
  z_d3($1)=z3d(P)

}
proc fracpt() { local posn, A
  A=$1
  posn=$2
  x_d3(posn)=x3d(i-1) + (x3d(i) - x3d(i-1))*A
  y_d3(posn)=y3d(i-1) + (y3d(i) - y3d(i-1))*A
  z_d3(posn)=z3d(i-1) + (z3d(i) - z3d(i-1))*A

}
proc map_segments_to_3d() {

    forall {
    
    insert d3
    i=0
    endpt(0)

    for (x) if (x > 0 && x < 1) {

      while (arc3d(i)/L < x) {
        i += 1
      }
      D=arc3d(i) - arc3d(i-1)
      if (D <= 0) {
      printf("\t\t * %s had a D < 0\n", secname())
      }
      alpha = (x*L - arc3d(i-1))/D
      fracpt(alpha,x)

    }
    endpt(1)

  }
}



//------------------------------------------------
//vector-distance.hoc
//------------------------------------------------


// Given a reference point (ie, soma), an apex point, and a point of
// interest, (POI), this function returns the distance from the reference point to
// the POI. These three points are vectors with x,y,z as their values
// written by Terrence Brannon, last modified by Yiota Poirazi, July 2001, poirazi@LNC.usc.edu

objref RP, POI, APEX

proc pvec() {
  printf("%s: \t", $s1)
  $o2.printf("%f ")
}

proc pvecs() {
  pvec("RP", RP)
  pvec("APEX",APEX)
  pvec("POI",POI)
}

proc clear_vecs() {
  RP=new Vector()
  APEX=new Vector()
  POI=new Vector()
}

objref vhold
vhold=new Vector()


func vector_distance() { local adjustment
//  print "func vector_distance() {"

  clear_vecs()
  
  RP=$o1.c
  APEX=$o2.c
  POI=$o3.c
  adjustment = $4

//  pvecs()

  // Subtract Psoma: Qapex = Papex - Psoma. Therefore Qsoma=0,0,0

  APEX.sub(RP)
  POI.sub(RP)
    RP.sub(RP)

//    pvecs()

  // Normalize Qapex, Creating Uapex

  vhold=APEX.c
  vhold.mul(vhold)
  APEX_BAR=sqrt(vhold.sum())

//  printf("APEX_BAR: %f\n", APEX_BAR)

  APEX.div(APEX_BAR)

//  pvec("UAPEX", APEX)

  // Find length of projection of Qdend onto Uapex

  H = POI.dot(APEX) + adjustment
  
  H=abs(H)

  return(H)
}

objref fvd_vec
strdef fvd_str
func find_vector_distance() {

  fvd_vec=new Vector()
  sprint(fvd_str, "access %s", $s1)
  execute1(fvd_str)
  
  vcreate2(fvd_vec,0)
  
  return(vector_distance(vRP,vAPEX,fvd_vec,adjustment))
}

func find_vector_distance_precise() {

  fvd_vec=new Vector()
  sprint(fvd_str, "access %s", $s1)
  execute1(fvd_str)
  
  vcreate3(fvd_vec,$2)
  
  return(vector_distance(vRP,vAPEX,fvd_vec,adjustment))
}

proc vcreate() {
  $o1.append(x3d(0))
  $o1.append(y3d(0))
  $o1.append(z3d(0))
}

proc vcreate2() {
  $o1.append(x3d($2))
  $o1.append(y3d($2))
  $o1.append(z3d($2))
}

proc vcreate3() {
  $o1.append(x_d3($2))
  $o1.append(y_d3($2))
  $o1.append(z_d3($2))
}


//--------------------------------------------
//current-balance.hoc
//--------------------------------------------


// This function is used to balance the membrane potential to v_init (= -70 mV)
// written by Yiota Poirazi, July 2001, poirazi@LNC.usc.edu

proc current_balance() {

 
  finitialize(-70)
  
  fcurrent()



  //printf("Balancing each compartment to %d mV\n", $1)

  forall {
      for (x) {
        if (ismembrane("na_ion") && ismembrane("ca_ion") && ismembrane("Ca_ion") && (ismembrane("k_ion"))) {
            e_pas(x)=(ina(x)+ik(x)+ica(x)+iCa(x)+g_pas(x)*v(x))/g_pas(x) 
        } else if (ismembrane("na_ion") && ismembrane("ca_ion") && (ismembrane("k_ion"))){
            e_pas(x)=(ina(x)+ik(x)+ica(x)+g_pas(x)*v(x))/g_pas(x) 
        } else if (ismembrane("na_ion") && (ismembrane("k_ion"))) {
            e_pas(x)=(ina(x)+ik(x)+g_pas(x)*v(x))/g_pas(x)
          //printf("Section %s ina: %g ik: %g\n", secname(), ina(x), ik(x))
          //psection()
        } else {
          print "simply assigning v(x)"
          e_pas(x)=v(x)
        }
      fcurrent()
    }
  }
}








//------------------------------------------------------
// SR spine on apical_dendrite[41]
//------------------------------------------------------

proc add_spine41() {

{apical_dendrite[41] connect spine_neck41 (0), 0.5}
{access spine_neck41}
{pt3dclear()}
{pt3dadd(37.075,-107.576,135.68,0.2)} 
{pt3dadd(37.075,-108.576,135.68,0.2)} 

{spine_neck41 connect spine_head41 (0), 0.5}
{access spine_head41}
{pt3dclear()}
{pt3dadd(37.075,-108.576,135.68,0.5)} 
{pt3dadd(37.075,-109.076,135.68,0.5)} 

access apical_dendrite[41]
insert cad 

spine_neck41 { 
    
    nseg=10
    L=1
    diam=0.2
    Ra=46.815

    //parameters as in apical_dendrite[41]
    cm=1
    insert h { K_h=8.5 gbar_h=2.80564e-05 vhalf_h=-90}
    insert car { gcabar_car=3e-05}
    insert calH { gcalbar_calH=0.00145521}
    insert cat { gcatbar_cat=0.0001651}
    insert Ca_ion {}
    insert kca { gbar_kca=0.0005 gk_kca=2.78092e-11}
    insert mykca { gkbar_mykca=0.033}
    insert ca_ion { eca=140}
    insert km { gbar_km=0.06}
    insert kap { gkabar_kap=0}
    insert kad { gkabar_kad=0.0200894}
    insert hha_old { ar2_hha_old=0.574396 W_hha_old=0.016 gnabar_hha_old=0.007 gkbar_hha_old=0.000868 gl_hha_old=0 el_hha_old=-70}
    insert na_ion { ena=50}
    insert k_ion { ek=-77}
    insert pas { g_pas=6.51779e-06 e_pas=-79.8552}
    insert cad {}
}

spine_head41 { 
    nseg=5
    L=0.5 
    diam=0.5 
    Ra=46.815

    //parameters as in apical_dendrite[41]       
    cm=1
    insert h { K_h=8.5 gbar_h=2.80564e-05 vhalf_h=-90}
    insert car { gcabar_car=3e-05}
    insert calH { gcalbar_calH=0.00145521}
    insert cat { gcatbar_cat=0.0001651}
    insert Ca_ion {}
    insert kca { gbar_kca=0.0005 gk_kca=2.78092e-11}
    insert mykca { gkbar_mykca=0.033}
    insert ca_ion { eca=140}
    insert km { gbar_km=0.06}
    insert kap { gkabar_kap=0}
    insert kad { gkabar_kad=0.0200894}
    insert hha_old { ar2_hha_old=0.574396 W_hha_old=0.016 gnabar_hha_old=0.007 gkbar_hha_old=0.000868 gl_hha_old=0 el_hha_old=-70}
    insert na_ion { ena=50}
    insert k_ion { ek=-77}
    insert pas { g_pas=6.51779e-06 e_pas=-79.8552}
    insert ca_ion { eca=140} 
    insert cad {}      
}


}



//------------------------------------------------------
// spine on apical_dendrite[95]
//------------------------------------------------------

proc add_spine95() {

access apical_dendrite[95]

insert cad

{apical_dendrite[95] connect spine_neck95 (0), 0.5}
{access spine_neck95}
{pt3dclear()}
{pt3dadd(120.887,-358.526,192,0.2)}
{pt3dadd(120.887,-359.526,192,0.2)} //spine_neck L=1, increase in y by 1

{spine_neck95 connect spine_head95 (0), 0.5}
{access spine_head95}
{pt3dclear()}
{pt3dadd(120.887,-359.526,192,0.5)}
{pt3dadd(120.887,-360.026,192,0.5)} //spine_head L=0.5, increase in y by 0.5


spine_neck95 { 
    nseg=10
    L=1
    diam=0.2
    Ra=35.254

    //parameters as in apical_dendrite[95]
    cm=1
    insert h { K_h=8.5 gbar_h=0.000158699 vhalf_h=-90}
    
    //Original channels (Poirazi model)
    //insert calH { gcalbar_calH=0.00145521} //original 
    //insert cat { gcatbar_cat=0.000472061}
    //insert car { gcabar_car=3e-5}

    //no VGCC
    insert calH { gcalbar_calH=0} 
    insert cat { gcatbar_cat=0}
    insert car { gcabar_car=0}

    insert Ca_ion {}
    insert kca { gbar_kca=5e-05 gk_kca=3.19996e-21}
    insert mykca { gkbar_mykca=0.004125}
    insert km { gbar_km=0.06}
    insert kap { gkabar_kap=0}
    insert kad { gkabar_kad=0.048672}
    insert hha_old { ar2_hha_old=0.3 W_hha_old=0.016 gnabar_hha_old=0.007 gkbar_hha_old=0.000868 gl_hha_old=0 el_hha_old=-70}
    insert na_ion { ena=50}
    insert k_ion { ek=-77}
    insert pas { g_pas=6.84217e-05 e_pas=-79.2517}
    insert ca_ion { eca=140} 
    insert cad 
        
}

spine_head95 { 
    nseg=5
    L=0.5
    diam=0.5
    Ra=35.254

    //parameters as in apical_dendrite[95]
    cm=1
    insert h { K_h=8.5 gbar_h=0.000158699 vhalf_h=-90}
    
    //Original channels (Poirazi model)
    //insert calH { gcalbar_calH=0.00145521} //original 
    //insert cat { gcatbar_cat=0.000472061}
    //insert car { gcabar_car=3e-5}

    //no VGCC
    insert calH { gcalbar_calH=0} 
    insert cat { gcatbar_cat=0}
    insert car { gcabar_car=0}

    insert Ca_ion {}
    insert kca { gbar_kca=5e-05 gk_kca=3.19996e-21}
    insert mykca { gkbar_mykca=0.004125}
    insert km { gbar_km=0.06}
    insert kap { gkabar_kap=0}
    insert kad { gkabar_kad=0.048672}
    insert hha_old { ar2_hha_old=0.3 W_hha_old=0.016 gnabar_hha_old=0.007 gkbar_hha_old=0.000868 gl_hha_old=0 el_hha_old=-70}
    insert na_ion { ena=50}
    insert k_ion { ek=-77}
    insert pas { g_pas=6.84217e-05 e_pas=-79.2517}
    insert ca_ion { eca=140} 
    insert cad 

}
}


//------------------------------------------------------------
//spine SO5
//------------------------------------------------------------

proc add_spineSO5() {

{dendrite[5] connect spine_neckSO5 (0), 0.5}
{access spine_neckSO5}
{pt3dclear()}

{pt3dadd(26.374,-42.363,161.6,0.2)} //spine_neck d=0.2
{pt3dadd(26.374,-43.363,161.6,0.2)} //spine_neck L=1, decrease in y by 1

{spine_neckSO5 connect spine_headSO5 (0), 0.5}
{access spine_headSO5}
{pt3dclear()}

{pt3dadd(26.374,-43.363,161.6,0.5)} //spine_head d=0.5 
{pt3dadd(26.374,-43.863,161.6,0.5)} //spine_neck L=1, decrease in y by 0.5


access dendrite[5]
insert cad 

spine_neckSO5 { 
    nseg=10
    L=1
    diam=0.2
    Ra=50

    //parameters as in dendrite[5]
    cm=1
    insert ca_ion { eca=140}
    insert hha_old { ar2_hha_old=1 W_hha_old=0.016 gnabar_hha_old=0.007 gkbar_hha_old=0.000868 gl_hha_old=0 el_hha_old=-70}
    insert pas { g_pas=5.24538e-06 e_pas=-82.2171}
    insert kap { gkabar_kap=0.012}
    insert kad { gkabar_kad=0}
    insert k_ion { ek=-77}
    insert h { K_h=8.5 gbar_h=1.872e-05 vhalf_h=-90}
    insert na_ion { ena=50}
    insert cad 
}

// spine headSO5

spine_headSO5 { 
    nseg=5
    L=0.5 
    diam=0.5 
    Ra=50
    
    //parameters as in dendrite[5]
    cm=1
    insert ca_ion { eca=140}
    insert hha_old { ar2_hha_old=1 W_hha_old=0.016 gnabar_hha_old=0.007 gkbar_hha_old=0.000868 gl_hha_old=0 el_hha_old=-70}
    insert pas { g_pas=5.24538e-06 e_pas=-82.2171}
    insert kap { gkabar_kap=0.012}
    insert kad { gkabar_kad=0}
    insert k_ion { ek=-77}
    insert h { K_h=8.5 gbar_h=1.872e-05 vhalf_h=-90}
    insert na_ion { ena=50}
    insert cad 

}

}


//-------------------------------------------------------------
// Synapses
//-------------------------------------------------------------

obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = -10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}

objref syn_
objref syn

proc synapses(){ local nsynEC, nsynCA3 localobj SectionEC, SectionCA3, SectionBS, randomize_location 
	/* E0 */
        apical_dendrite[85] syn_ = new MyExp2Syn(0.5) 
        pre_list.append(syn_)	// AMPA		EC input
        syn_.tau1 = 0.5
    	syn_.tau2 = 3
    	syn_.e = 0

        /* E1 */   	
        apical_dendrite[95] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// AMPA		EC input
        syn_.tau1 = 0.5
    	syn_.tau2 = 3
    	syn_.e = 0

        /* E2 */   	
        apical_dendrite[48] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// AMPA		CA3 Schaffer collaterals
        syn_.tau1 = 0.5
    	syn_.tau2 = 3
    	syn_.e = 0

        /* E3 */   
	apical_dendrite[48] syn_ = new NMDA(0.5)  pre_list.append(syn_)		// NMDA		CA3 Schaffer collaterals
    	syn_.tcon = 2.3	
    	syn_.tcoff = 100
    	syn_.gNMDAmax = 1	// use connection weight to determine max cond
  	
        /* E4 */  
        apical_dendrite[6]  syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// AMPA		PC recurrent input
    	syn_.tau1 = 0.5
    	syn_.tau2 = 3
    	syn_.e = 0
  	
        /* I5 */   	
        soma[3] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)		// GABA-A	B cell
    	syn_.tau1 = 1
    	syn_.tau2 = 8
    	syn_.e = -75

  	/* I6 */   	
        dendrite[18] syn_ = new MyExp2Syn(0.1)  pre_list.append(syn_)		// GABA-A	AA cell
    	syn_.tau1 = 1
    	syn_.tau2 = 8
    	syn_.e = -75

  	/* I7 */
	apical_dendrite[85]  syn_ = new MyExp2Syn(0.5) pre_list.append(syn_)	// GABA-A	OLM cells
    	syn_.tau1 = 1
    	syn_.tau2 = 8
    	syn_.e = -75

  	/* I8 */
	apical_dendrite[95]  syn_ = new MyExp2Syn(0.5) pre_list.append(syn_)	// GABA-A	OLM cells
    	syn_.tau1 = 1
    	syn_.tau2 = 8
    	syn_.e = -75

  	/* I9 */
	apical_dendrite[85]  syn_ = new MyExp2Syn(0.5) pre_list.append(syn_)	// GABA-B	OLM cells
    	syn_.tau1 = 35
    	syn_.tau2 = 100
    	syn_.e = -75

  	/* I10 */
	apical_dendrite[95] syn_ = new MyExp2Syn(0.5) pre_list.append(syn_)	// GABA-B	OLM cells
    	syn_.tau1 = 35
    	syn_.tau2 = 100
    	syn_.e = -75

  	/* I11 */
   	apical_dendrite[64] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-A	BS cells
    	syn_.tau1 = 1
    	syn_.tau2 = 8
    	syn_.e = -75

  	/* I12 */
        apical_dendrite[60] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-A	BS cells
    	syn_.tau1 = 1
    	syn_.tau2 = 8
    	syn_.e = -75

  	/* I13 */
   	apical_dendrite[46] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-A	BS cells
    	syn_.tau1 = 1
    	syn_.tau2 = 8
    	syn_.e = -75

  	/* I14 */ 
  	apical_dendrite[16] syn_ = new MyExp2Syn(0.4)  pre_list.append(syn_)	// GABA-A	BS cells
   	syn_.tau1 = 1
    	syn_.tau2 = 8
    	syn_.e = -75

  	/* I15 */ 
  	apical_dendrite[14] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-A	BS cells
    	syn_.tau1 = 1
    	syn_.tau2 = 8
    	syn_.e = -75

  	/* I16 */  
 	apical_dendrite[6] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-A	BS cells
    	syn_.tau1 = 1
    	syn_.tau2 = 8
    	syn_.e = -75

  	/* I17 */ 
  	apical_dendrite[64] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-B	BS cells
    	syn_.tau1 = 35
    	syn_.tau2 = 100
    	syn_.e = -75

  	/* I18 */ 
  	apical_dendrite[60] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-B	BS cells
    	syn_.tau1 = 35
    	syn_.tau2 = 100
    	syn_.e = -75

  	/* I19 */  
 	apical_dendrite[46] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-B	BS cells
    	syn_.tau1 = 35
    	syn_.tau2 = 100
    	syn_.e = -75

  	/* I20 */
   	apical_dendrite[16] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-B	BS cells
    	syn_.tau1 = 35
    	syn_.tau2 = 100
    	syn_.e = -75

  	/* I21 */
   	apical_dendrite[14] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-B	BS cells
    	syn_.tau1 = 35
    	syn_.tau2 = 100
    	syn_.e = -75

  	/* I22 */ 
  	apical_dendrite[6] syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)	// GABA-B	BS cells
    	syn_.tau1 = 35
    	syn_.tau2 = 100
    	syn_.e = -75

    	/* E23 */ 
  	apical_dendrite[48] syn_ = new STDPE2(0.5)  pre_list.append(syn_)		// AMPA modifiable	CA3 Schaffer collaterals
	syn_.tau1 = 0.5
	syn_.tau2 = 3
	syn_.e = 0
      
        /* E24 SO spine on basal dendrite dendrite[5]*/   	
        spine_headSO5 syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)			// AMPA		CA3 Schaffer collaterals
        syn_.tau1 = 0.5
        syn_.tau2 = 3
        syn_.e = 0

        /* E25 SO spine on basal dendrite dendrite[5]*/  
        spine_headSO5 syn = new NMDAca(0.5) pre_list.append(syn)			//NMDA		CA3 Schaffer collaterals
        syn.fCa = 0.1	// fraction of Ca current (Bloodgood & Sabatini)
        syn.tcon = 3	
        syn.tcoff = 100
        syn.mgconc = 1	// (mM) standard Mg conc
        syn.gamma = 0.08	// Larkum Science 2009 (sharpens voltage curve)

        /* E26 SO spine on basal dendrite dendrite[5]*/    
	spine_headSO5 syn_ = new NMDA(0.5)  pre_list.append(syn_)			// NMDA		CA3 Schaffer collaterals
    	syn_.tcon = 2.3	
    	syn_.tcoff = 100
    	syn_.gNMDAmax = 1	// use connection weight to determine max cond
     
        /* E27 spine on apical dendrite apical_dendrite[41] */   
        spine_head41 syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)			// AMPA		CA3 Schaffer collaterals
        syn_.tau1 = 0.5
    	syn_.tau2 = 3
    	syn_.e = 0

        /* E28  spine on apical dendrite apical_dendrite[41] */   			// NMDA		CA3 Schaffer collaterals
        spine_head41 syn = new NMDAca(0.5) pre_list.append(syn)
        syn.fCa = 0.1	// fraction of Ca current (Bloodgood & Sabatini)
        syn.tcon = 3	
        syn.tcoff = 100
        syn.mgconc = 1	// (mM) standard Mg conc
        syn.gamma = 0.08	// Larkum Science 2009 (sharpens voltage curve)

        //for plotting in a shape plot	
        spine_head41 syn = new NMDAca(0.5) synapse_list.append(syn)
    
        /* E29 spine on apical_dendrite[95] */ 
    	spine_head95 syn_ = new MyExp2Syn(0.5)  pre_list.append(syn_)			// AMPA		EC input
    	syn_.tau1 = 0.5   
    	syn_.tau2 = 3
    	syn_.e = 0

        /* E30   spine on apical_dendrite[95] */    					// NMDA		CA3 Schaffer collaterals
        spine_head95 syn = new NMDAca(0.5) pre_list.append(syn)
        syn.fCa = 0.1	// fraction of Ca current (Bloodgood & Sabatini)
        syn.tcon = 3	
        syn.tcoff = 100
        syn.mgconc = 1	// (mM) standard Mg conc
        syn.gamma = 0.08	// Larkum Science 2009 (sharpens voltage curve)

        /* E31 spine on apical_dendrite[95] */   
    	spine_head95 syn_ = new STDPE2(0.5)  pre_list.append(syn_)			// AMPA modifiable	
	syn_.tau1 = 0.5
	syn_.tau2 = 3
	syn_.e = 0

  
        /*E32-E51*/ 
        //20 EC input AMPA on PC, random location
        SectionEC=$o1  
        randomseed=2
        randomize_location = new RandomLocation(SectionEC, randomseed)
        nsynEC=20
        objref synEC[nsynEC] //EC AMPA synapses on PC
     
        for i=0,nsynEC-1 {
	        synEC[i] = new MyExp2Syn(0.5)  
    		synEC[i].tau1 = 0.5
    		synEC[i].tau2 = 3
    		synEC[i].e = 0
        	randomize_location.loc(synEC[i]) 
        	pre_list.append(synEC[i])
        }

   
       /*E52-E151*/ 
       //100 CA3 input AMPA on PC, random location 
       SectionCA3=$o2  
       randomseed=2
       randomize_location = new RandomLocation(SectionCA3, randomseed)
       nsynCA3=100
       objref synCA3[nsynCA3] //CA3 AMPA synapses on PC
     
       for i=0,nsynCA3-1 {
      		synCA3[i] = new MyExp2Syn(0.5)  
    		synCA3[i].tau1 = 0.5
    		synCA3[i].tau2 = 3
    		synCA3[i].e = 0
      		randomize_location.loc(synCA3[i]) 
      		pre_list.append(synCA3[i])
       }


    
     	/*I152-I171*/     
     	//20 BS GABAA input on PC, random location
        SectionBS=$o3  
     	randomseed=2
     	randomize_location = new RandomLocation(SectionBS, randomseed)

     	nsynBSA=20
     	objref synBSA[nsynBSA] //BS GABAA synapses on PC
     
     	for i=0,nsynBSA-1 {
      		synBSA[i] = new MyExp2Syn(0.5)  
    		synBSA[i].tau1 = 1
    		synBSA[i].tau2 = 8
    		synBSA[i].e = -75
      		randomize_location.loc(synBSA[i]) 
      		pre_list.append(synBSA[i])
         }

    
        /*I172-I191*/ 
        //20 BS GABAB input on PC, random location 
        randomseed=1
        randomize_location = new RandomLocation(SectionBS, randomseed)
     	nsynBSB=20//100
     	objref synBSB[nsynBSB] //BS GABAB synapses on PC
     
     	for i=0,nsynBSB-1 {
      		synBSB[i] = new MyExp2Syn(0.5) 
    		synBSB[i].tau1 = 35
    		synBSB[i].tau2 = 100
    		synBSB[i].e = -75
      		randomize_location.loc(synBSB[i]) 
      		pre_list.append(synBSB[i])
        }

}

//-----------------------------------

func is_art() { return 0 }

//----------------------------------------------------------------------------

endtemplate PyramidalCell


